PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1280, 800]
  expName = pilot_online_study_non_instr
  keyboardBackend = ioHub
  logging level = warning
  measureFrameRate = False
  runMode = 0
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Routines
  Routine init_params
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    CodeComponent code_params
      Code Type = JS
      Before JS Experiment:
        // Silence the console
        console.log = function () {};
        console.warn = function () {};
        console.error = function () {};
        console.info = function () {};
        console.debug = function () {};

        ////

        var checkOK = setInterval(function() { //Use basic nested setInterval for Status check of dialog
            console.log("Check if DialogBox loaded");
           if (document.getElementById("progressMsg")) { //Wait for ProgressMsg to exist
                console.log("Dialogbox exists."); //Dialog Box Ready
              var statusText = document.getElementById("progressMsg").innerHTML; //get Status of ProgressMsg
              if(statusText == "all resources downloaded.") //If status is good. Go and let JS Click the button
              {
              console.log("All resources were downloaded! Press Ok now...");
              document.getElementById("dialogOK").click(); // Click on the checkbox
              clearInterval(checkOK);
              }
           }
        }, 500); // check every 500ms

        //Source: https://discourse.psychopy.org/t/is-there-a-way-to-skip-the-dialog-box-when-running-online/25625/2
      Begin JS Experiment:
        // Declare participantN and paddedParticipantN at the top level
        //let participantN = null;

        paddedParticipantN = null;

        const num_target_melodies = 140; // Total number of correct-grammar melodies (exposure + test)
        const num_foil_melodies = 40;
        num_exp_melodies = 100;
        const num_correct_melodies = (num_target_melodies - num_exp_melodies); // Target melodies
        num_test_melodies = num_correct_melodies + num_foil_melodies; // All test melodies (targets + foils)

        const GCS_SOUNDS_URL = "https://storage.googleapis.com/acw709_test_bucket_2/sounds/";
        const GCS_CONDITIONS_URL = "https://storage.googleapis.com/acw709_test_bucket_2/conditions/";

        async function fetchParticipantData() {
            try {
              // Step 1: Fetch participant number first
              const response = await fetch('https://script.google.com/macros/s/AKfycbzdR77Xgj-Klcig_hARCNIsbaCP6KlODFFfuhEYzoH4PrFEmqb_05RWT8gKsdbYAoTAIw/exec');
              const data = await response.json();

              const participantN = data.participantN;
              paddedParticipantN = participantN.toString().padStart(3, '0');
        //      const paddedParticipantN = '000'
        //      console.log(`Participant Number: ${paddedParticipantN}`);

              expInfo['participant'] = paddedParticipantN;
              let data_filename = `data/${expInfo['participant']}_${expName}_${expInfo['date']}`;
              psychoJS.experiment.dataFileName = data_filename;
        //      console.log(`Data filename set to: ${data_filename}`);

              // Define calibration file and push to resources
              const calibration_list = [
                  "HugginsPitch_calibration.flac"
              ].map(file => `${GCS_SOUNDS_URL}${file}`);

              const calibration_resources = [
                ...calibration_list
              ];

              const calibration_stimuli = calibration_resources.map(file => ({ name: file.split('/').pop(), path: file }));

              await psychoJS._serverManager.prepareResources(calibration_stimuli);

              // Do the same with the example file

              const example_list = [
                  "HugginsPitch_example_2.flac"
              ].map(file => `${GCS_SOUNDS_URL}${file}`);

              const example_resources = [
                ...example_list
              ];

              const example_stimuli = example_resources.map(file => ({ name: file.split('/').pop(), path: file }));

              await psychoJS._serverManager.prepareResources(example_stimuli);

              // Next, define the Huggins Pitch stimuli and push one set at a time
              const huggins_set1_list = [
                  "HugginsPitch_set1_1.flac",
                  "HugginsPitch_set1_2.flac",
                  "HugginsPitch_set1_3.flac"
              ].map(file => `${GCS_SOUNDS_URL}${file}`);

              const huggins_set1_resources = [
                ...huggins_set1_list
              ];

              const huggins_set1_stimuli = huggins_set1_resources.map(file => ({ name: file.split('/').pop(), path: file }));

              await psychoJS._serverManager.prepareResources(huggins_set1_stimuli);

              const huggins_set2_list = [
                  "HugginsPitch_set2_1.flac",
                  "HugginsPitch_set2_2.flac",
                  "HugginsPitch_set2_3.flac"
              ].map(file => `${GCS_SOUNDS_URL}${file}`);

              const huggins_set2_resources = [
                ...huggins_set2_list
              ];

              const huggins_set2_stimuli = huggins_set2_resources.map(file => ({ name: file.split('/').pop(), path: file }));

              await psychoJS._serverManager.prepareResources(huggins_set2_stimuli);

              const huggins_set3_list = [
                  "HugginsPitch_set3_1.flac",
                  "HugginsPitch_set3_2.flac",
                  "HugginsPitch_set3_3.flac"
              ].map(file => `${GCS_SOUNDS_URL}${file}`);

              const huggins_set3_resources = [
                ...huggins_set3_list
              ];

              const huggins_set3_stimuli = huggins_set3_resources.map(file => ({ name: file.split('/').pop(), path: file }));

              await psychoJS._serverManager.prepareResources(huggins_set3_stimuli);

              const huggins_set4_list = [
                  "HugginsPitch_set4_1.flac",
                  "HugginsPitch_set4_2.flac",
                  "HugginsPitch_set4_3.flac"
              ].map(file => `${GCS_SOUNDS_URL}${file}`);

              const huggins_set4_resources = [
                ...huggins_set4_list
              ];

              const huggins_set4_stimuli = huggins_set4_resources.map(file => ({ name: file.split('/').pop(), path: file }));

              await psychoJS._serverManager.prepareResources(huggins_set4_stimuli);

              const huggins_set5_list = [
                  "HugginsPitch_set5_1.flac",
                  "HugginsPitch_set5_2.flac",
                  "HugginsPitch_set5_3.flac"
              ].map(file => `${GCS_SOUNDS_URL}${file}`);

              const huggins_set5_resources = [
                ...huggins_set5_list
              ];

              const huggins_set5_stimuli = huggins_set5_resources.map(file => ({ name: file.split('/').pop(), path: file }));

              await psychoJS._serverManager.prepareResources(huggins_set5_stimuli);

              const huggins_set6_list = [
                  "HugginsPitch_set6_1.flac",
                  "HugginsPitch_set6_2.flac",
                  "HugginsPitch_set6_3.flac"
              ].map(file => `${GCS_SOUNDS_URL}${file}`);

              const huggins_set6_resources = [
                ...huggins_set6_list
              ];

              const huggins_set6_stimuli = huggins_set6_resources.map(file => ({ name: file.split('/').pop(), path: file }));

              await psychoJS._serverManager.prepareResources(huggins_set6_stimuli);

              // Push the conditions lists (exposure and test) for the participant next
              const conditions_list = [
                  `${GCS_CONDITIONS_URL}exp_stims_${paddedParticipantN}.csv`,
                  `${GCS_CONDITIONS_URL}test_stims_${paddedParticipantN}.csv`
              ];

              const exposure_melodies_list = Array.from({ length: num_exp_melodies }, (_, i) =>
                  `${GCS_SOUNDS_URL}participant_${paddedParticipantN}_exposure_melody_${i.toString().padStart(3, '0')}.wav`
              );

              const test_melodies_list = Array.from({ length: num_correct_melodies }, (_, i) =>
                  `${GCS_SOUNDS_URL}participant_${paddedParticipantN}_target_melody_${i.toString().padStart(3, '0')}.wav`
              ).concat(
                  Array.from({ length: num_foil_melodies }, (_, i) =>
                      `${GCS_SOUNDS_URL}participant_${paddedParticipantN}_foil_melody_${i.toString().padStart(3, '0')}.wav`
                  )
              );

              const test_tones_list = [
                  `${GCS_SOUNDS_URL}participant_${paddedParticipantN}_low_freq_vol_adj.wav`,
                  `${GCS_SOUNDS_URL}participant_${paddedParticipantN}_high_freq_vol_adj.wav`
              ];

              const attention_tones_list = Array.from({ length: 5 }, (_, i) =>
                  `${GCS_SOUNDS_URL}participant_${paddedParticipantN}_${i + 1}_clicks_audio.wav`
              );

              // Split into more granular list of exposure and test melodies (so they load in rough protocol order)
              const additional_resources = [
                ...test_tones_list,
                ...exposure_melodies_list,
                ...attention_tones_list,
                ...test_melodies_list
              ];

              const additional_stimuli = additional_resources.map(file => ({ name: file.split('/').pop(), path: file }));

              await psychoJS._serverManager.prepareResources(additional_stimuli);

              const conditions_resources = [
                ...conditions_list
              ];

              const conditions_stimuli = conditions_resources.map(file => ({ name: file.split('/').pop(), path: file }));

              await psychoJS._serverManager.prepareResources(conditions_stimuli);

            } catch (error) {
              console.error('Error fetching participant number:', error);
            }
        }

        // Start the process
        fetchParticipantData();
      End JS Experiment:
        //if (experimentComplete === true) {
        //    psychoJS.shelf.addIntegerValue({key: ['participant_counter_mono'], delta: 1})
        //} // Check expt works without counter.
  Routine play_audio
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    SoundComponent sound_playback
      hamming = False
      sound [set every repeat] = $stimulus
      startVal [time (s)] = 0.1
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  Routine welcome_screen
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    TextComponent text_welcomeMessage
      letterHeight = 0.04
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        You will now experience two blocks of listening: In Block 1, you will simply click through the test and listen to each melody when it plays. In Block 2, you will listen to some new melodies and for each, you will choose an answer that best represents the new melody compared to the melodies in Block 1.

        In both blocks, a small number of attention checks will be carried out in which you will hear a short audio clip containing 'beeps' and then be asked how many beeps were in the clip.

        Please click 'Next' to proceed.
    ButtonComponent button_nextPageWelcome
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      oncePerClick = False
      pos = (0, -0.3)
      save = first click
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = Next
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    CodeComponent code_buttonDelayWelcome
      Code Type = JS
      Begin JS Experiment:
        delay_duration = 0.1;
        psychoJS.experiment.addData('delay_duration', delay_duration);
    CodeComponent code_nextPageWelcome
      Code Type = JS
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      Begin JS Experiment:
        clickTrigger = [];
      Begin JS Routine:
        clickTrigger = 0;
        routineStartTime = t;
        waitTime = 5;

        ////
      Each JS Frame:
        if ((t - routineStartTime) > waitTime) {

            // Check for left mouse press within button area
            if (mouse_nextPageWelcome.isPressedIn(button_nextPageWelcome) && clickTrigger === 0 && mouse_nextPageWelcome.getPressed()[0]) {
                clickTrigger = 1; // state when mouse is pressed and held on button
                pressingTime = t;
            }

            if (clickTrigger === 1 && !button_nextPageWelcome.contains(mouse_nextPageWelcome)) {
                clickTrigger = 2; // state when mouse is pressed on button (held) and then moved off button (while holding)
            }

            if (mouse_nextPageWelcome.getPressed()[0] && !button_nextPageWelcome.contains(mouse_nextPageWelcome)) {
                clickTrigger = 2; // state when mouse is pressed but not on button (prevents off-button presses activating button)
            }

            if (clickTrigger === 2 && !mouse_nextPageWelcome.getPressed()[0]) {
                clickTrigger = 0; // resets mouse so new click required to press button
            }

            if (!mouse_nextPageWelcome.isPressedIn(button_nextPageWelcome) && button_nextPageWelcome.contains(mouse_nextPageWelcome) && t > pressingTime && clickTrigger === 1) {
                clickTrigger = 3; // state when button is pressed and released without moving off button
            }

            if (clickTrigger === 3) {
                clickTrigger = 0; // resets clickTrigger
                continueRoutine = false; // completes routine
            }
        }
    MouseComponent mouse_nextPageWelcome
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine pre_test
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    TextComponent text_preTestMessage
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        You have now completed Block 1.

        Block 2 will begin when you click the button below. Please listen to all the new melodies carefully and when answering each question, respond based on the melodic sequence you just heard compared to the sequences you heard in Block 1.
    ButtonComponent button_nextPageTest
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = Begin Block 2
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    MouseComponent mouse_nextPageTest
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent code_nextPageTest
      Code Type = JS
      Begin JS Routine:
        clickTrigger = 0;
        routineStartTime = t;
        waitTime = 3;
      Each JS Frame:
        if ((t - routineStartTime) > waitTime) {

            // Check for left mouse press within button area
            if (mouse_nextPageTest.isPressedIn(button_nextPageTest) && clickTrigger === 0 && mouse_nextPageTest.getPressed()[0]) {
                clickTrigger = 1; // state when mouse is pressed and held on button
                pressingTime = t;
            }

            if (clickTrigger === 1 && !button_nextPageTest.contains(mouse_nextPageTest)) {
                clickTrigger = 2; // state when mouse is pressed on button (held) and then moved off button (while holding)
            }

            if (mouse_nextPageTest.getPressed()[0] && !button_nextPageTest.contains(mouse_nextPageTest)) {
                clickTrigger = 2; // state when mouse is pressed but not on button (prevents off-button presses activating button)
            }

            if (clickTrigger === 2 && !mouse_nextPageTest.getPressed()[0]) {
                clickTrigger = 0; // resets mouse so new click required to press button
            }

            if (!mouse_nextPageTest.isPressedIn(button_nextPageTest) && button_nextPageTest.contains(mouse_nextPageTest) && t > pressingTime && clickTrigger === 1) {
                clickTrigger = 3; // state when button is pressed and released without moving off button
            }

            if (clickTrigger === 3) {
                clickTrigger = 0; // resets clickTrigger
                continueRoutine = false; // completes routine
            }
        }
  Routine pre_exp
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    TextComponent text_preExpMessage
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = Block 1 will begin when you click the button below. Please listen to all the melodies carefully.
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    ButtonComponent button_nextPageExp
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (0, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = Begin Block 1
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    MouseComponent mouse_nextPageExp
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent code_nextPageExp
      Code Type = JS
      Begin JS Routine:
        clickTrigger = 0;
        routineStartTime = t;
        waitTime = 1;
      Each JS Frame:
        if ((t - routineStartTime) > waitTime) {

            // Check for left mouse press within button area
            if (mouse_nextPageExp.isPressedIn(button_nextPageExp) && clickTrigger === 0 && mouse_nextPageExp.getPressed()[0]) {
                clickTrigger = 1; // state when mouse is pressed and held on button
                pressingTime = t;
            }

            if (clickTrigger === 1 && !button_nextPageExp.contains(mouse_nextPageExp)) {
                clickTrigger = 2; // state when mouse is pressed on button (held) and then moved off button (while holding)
            }

            if (mouse_nextPageExp.getPressed()[0] && !button_nextPageExp.contains(mouse_nextPageExp)) {
                clickTrigger = 2; // state when mouse is pressed but not on button (prevents off-button presses activating button)
            }

            if (clickTrigger === 2 && !mouse_nextPageExp.getPressed()[0]) {
                clickTrigger = 0; // resets mouse so new click required to press button
            }

            if (!mouse_nextPageExp.isPressedIn(button_nextPageExp) && button_nextPageExp.contains(mouse_nextPageExp) && t > pressingTime && clickTrigger === 1) {
                clickTrigger = 3; // state when button is pressed and released without moving off button
            }

            if (clickTrigger === 3) {
                clickTrigger = 0; // resets clickTrigger
                continueRoutine = false; // completes routine
            }
        }
  Routine test_choice
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    ButtonComponent button_familiar
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (-.3, -0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = Familiar
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    ButtonComponent button_unfamiliar
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (0.3, -0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = Unfamiliar
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    TextComponent text_testChoice
      letterHeight = 0.05
      pos = (0, 0.0)
      startVal [time (s)] = 0.0
      text = Which option best describes the melody you just heard compared to the melodies in Block 1?
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    CodeComponent code_testChoice
      Code Type = JS
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      Begin JS Routine:
        clickTrigger = 0;
      Each JS Frame:
        // Check for left mouse press within button area
        if ((mouse_testChoice.isPressedIn(button_familiar) || mouse_testChoice.isPressedIn(button_unfamiliar)) && clickTrigger === 0 && mouse_testChoice.getPressed()[0]) {
            clickTrigger = 1; // state when mouse is pressed and held on button
            pressingTime = t;
            if (mouse_testChoice.isPressedIn(button_familiar)) {
                buttonChoice = 'a';
            } else if (mouse_testChoice.isPressedIn(button_unfamiliar)) {
                buttonChoice = 'b';
            }
        }

        if (clickTrigger === 1 && !button_familiar.contains(mouse_testChoice) && !button_unfamiliar.contains(mouse_testChoice)) {
            clickTrigger = 2;
            buttonChoice = null; // state when mouse is pressed on button (held) and then moved off button (while holding)
        }

        if (mouse_testChoice.getPressed()[0] && !button_familiar.contains(mouse_testChoice) && !button_unfamiliar.contains(mouse_testChoice)) {
            clickTrigger = 2;
            buttonChoice = null; // state when mouse is pressed but not on button (prevents off-button presses activating button)
        }

        if (clickTrigger === 2 && !mouse_testChoice.getPressed()[0]) {
            clickTrigger = 0; // resets mouse so new click required to press button
        }

        if ((!mouse_testChoice.isPressedIn(button_familiar) && button_familiar.contains(mouse_testChoice)) || (!mouse_testChoice.isPressedIn(button_unfamiliar) && button_unfamiliar.contains(mouse_testChoice)) && t > pressingTime && clickTrigger === 1) {
            if (button_familiar.contains(mouse_testChoice) && buttonChoice === 'a') {
                clickTrigger = 3; // state when button is pressed and released without moving off button
                button_familiar.numClicks = 1;
            } else if (button_unfamiliar.contains(mouse_testChoice) && buttonChoice === 'b') {
                clickTrigger = 3; // state when button is pressed and released without moving off button
                button_unfamiliar.numClicks = 1;
            }
        }

        if (clickTrigger === 3) {
            clickTrigger = 0; // resets clickTrigger
            buttonChoice = null;
            continueRoutine = false; // completes routine
        }
    MouseComponent mouse_testChoice
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent text_debugTestChoice
      disabled = True
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text [set every frame] = $clickTrigger
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  Routine next_melody
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    ButtonComponent button_nextMelody
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (0, -0.08)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = Play
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    TextComponent text_nextMelody
      letterHeight = 0.05
      pos = (0, 0.08)
      startVal [time (s)] = 0.0
      text = Click the button to hear the next melody.
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    CodeComponent code_buttonDelay
      Code Type = JS
      disabled = True
      Begin JS Routine:
        routine_start_time = globalClock.getTime();
        psychoJS.experiment.addData('routine_start_time', routine_start_time);
      Each JS Frame:
        // Check if the delay has passed
        if (t - routine_start_time >= delay_duration) {
            button_nextMelody.status = PsychoJS.Status.STARTED;  // Enable the button after the delay
        } else {
            button_nextMelody.status = PsychoJS.Status.NOT_STARTED;  // Keep the button disabled until the delay passes
        };

        // Only check for button clicks if the button is active
        if (button_nextMelody.status === PsychoJS.Status.STARTED) {
            if (button_nextMelody.isClicked) {
                // Execute button click actions here
            }
        }
    MouseComponent mouse_nextMelody
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent code_nextMelody
      Code Type = JS
      Begin JS Routine:
        clickTrigger = 0;
      Each JS Frame:
        // Check for left mouse press within button area
        if (mouse_nextMelody.isPressedIn(button_nextMelody) && clickTrigger === 0 && mouse_nextMelody.getPressed()[0]) {
            clickTrigger = 1; // state when mouse is pressed and held on button
            pressingTime = t;
        }

        if (clickTrigger === 1 && !button_nextMelody.contains(mouse_nextMelody)) {
            clickTrigger = 2; // state when mouse is pressed on button (held) and then moved off button (while holding)
        }

        if (mouse_nextMelody.getPressed()[0] && !button_nextMelody.contains(mouse_nextMelody)) {
            clickTrigger = 2; // state when mouse is pressed but not on button (prevents off-button presses activating button)
        }

        if (clickTrigger === 2 && !mouse_nextMelody.getPressed()[0]) {
            clickTrigger = 0; // resets mouse so new click required to press button
        }

        if (!mouse_nextMelody.isPressedIn(button_nextMelody) && button_nextMelody.contains(mouse_nextMelody) && t > pressingTime && clickTrigger === 1) {
            clickTrigger = 3; // state when button is pressed and released without moving off button
        }

        if (clickTrigger === 3) {
            clickTrigger = 0; // resets clickTrigger
            continueRoutine = false; // completes routine
        }
  Routine end_screen
    RoutineSettingsComponent end_screen
      disabled = True
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    TextComponent text_endMessage
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        You have now completed the study. Thank you for participating!

        You will now be redirected to the Prolific study page to complete your submission.
    CodeComponent code_endMessage
      Code Type = JS
      Begin JS Routine:
        experimentComplete = true;

        function flattenObject(obj, prefix = '') {
            const flattened = {};
            for (let key in obj) {
                if (obj.hasOwnProperty(key)) {
                    const newKey = prefix ? `${prefix}.${key}` : key; // Add prefix for nested keys
                    const value = obj[key];

                    if (Array.isArray(value)) {
                        // Convert arrays to a string separated by commas
                        flattened[newKey] = value.join(','); // Optionally change this delimiter if needed
                    } else if (typeof value === 'object' && value !== null) {
                        // Recursively flatten nested objects
                        Object.assign(flattened, flattenObject(value, newKey));
                    } else {
                        // Add primitive values directly
                        flattened[newKey] = value;
                    }
                }
            }
            return flattened;
        }

        function trialsDataToCSV(trialsData, delimiter = ',') {
            if (!trialsData || trialsData.length === 0) {
                console.warn('No trial data available to save.');
                return '';
            }

            // Flatten all trial objects
            const flattenedTrials = trialsData.map(trial => flattenObject(trial));

            // Get all unique headers (keys) from the flattened data
            const headers = Array.from(new Set(flattenedTrials.flatMap(trial => Object.keys(trial))));

            // Create the CSV header row
            let csv = headers.join(delimiter) + '\n';

            // Add each trial's data as a row
            flattenedTrials.forEach(trial => {
                const row = headers.map(header => {
                    const value = trial[header] !== undefined ? trial[header] : '';
                    // If value is a string, escape the delimiter (optional but useful)
                    return typeof value === 'string' && value.includes(delimiter)
                        ? `"${value}"`
                        : value;
                });
                csv += row.join(delimiter) + '\n';
            });

            return csv;
        }

        const csvData = trialsDataToCSV(psychoJS.experiment._trialsData, '\t');

        // Disable downloading results to browser
        psychoJS._saveResults = 0;

        // Generate filename for results
        let filename = psychoJS._experiment._experimentName + '_' + psychoJS._experiment._datetime + '_participant_' + paddedParticipantN + '.csv';

        // Send data to OSF via DataPipe
        console.log('Saving data...');
        fetch('https://pipe.jspsych.org/api/data', {
            method: 'POST',
            headers: {
                'Content-Type': 'application/json',
                Accept: '*/*',
            },
            body: JSON.stringify({
                experimentID: 'wsIZRbCxJLNS', // ⭑ UPDATE WITH YOUR DATAPIPE EXPERIMENT ID ⭑
                filename: filename,
                data: csvData,
            }),
        }).then(response => response.json())
          .then(data => {
              // Log response
              console.log('Response from server:', data);

              // Redirect to the chosen URL
              console.log('Redirecting...');
              window.location.href = 'https://app.prolific.com/submissions/complete?cc=CPRPTY9P'; // Okay to use same code as for odd-harmonics version
          })
          .catch(error => {
              // Handle any errors
              console.error('Error sending data:', error);
          });
  Routine info_consent
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    TextboxComponent textbox_infoSheet
      bold = False
      editable = False
      letterHeight = 0.05
      overflow = scroll
      size = (0.9, 7)
      startVal [time (s)] = 0.0
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      text:
        Invitation paragraph:

        You are being invited to participate in a research study. Before you decide whether or not you wish to participate in this study, it is important for you to understand why the research is being done and what it will involve. Please take time to read the following information carefully and discuss it with others if you wish. Ask us questions if there is anything that is not clear or if you would like more information.

        ---

        What is the purpose of the study and what would taking part involve?

        The purpose of this study is to determine how people learn repeating patterns that exist in melodies when listening to music, and to see how this learning is affected by the type of musical scale in which a melody is played and the specific quality (the “timbre”) of the melody’s notes.

        If you choose to take part, you will participate in a single research session in which you will listen to a series of short melodies in two sections: In the first section, you will simply listen to each melody provided on the form. In the second section, you will listen to some new melodies and will be asked whether each one sounded new or familiar based on the melodies you heard in the first section. The study is estimated to take a maximum of 30 minutes to complete. This study will collect your basic demographic data provided by Prolific from your user profile and your responses from the study’s second section with an external research software.

        You will not meet the researcher(s) who are running this study if you choose to participate, but you are welcome to contact the researcher(s) using the provided contact details on this information sheet if you have any questions or concerns regarding the study. There are no plans to follow up with anyone who participates in this study.

        Your participation in this study will have a positive research impact because it will help researchers understand how people learn melodic patterns from listening to music and find out what qualities of music affect how this learning occurs.

        ---

        Why am I being invited?

        You are being invited to participate in this research study because you at least 18 years old, you report being fluent in the English language, you report having normal hearing, and you are able to wear headphones for listening to audio for the full duration of the study.

        You should not take part in this study if you do not meet all of the above criteria.

        ---

        Do I have to take part?

        This participant information sheet has been written to help you decide if you would like to take part. It is up to you whether you wish to take part. If you do decide to take part you will be free to withdraw at any time without needing to provide a reason, and with no penalties or detrimental effects.

        ---

        What are the possible benefits of taking part?

        There are no expected benefits specifically to individuals who choose to participate in this study. However, your participation in this study will have a general positive impact by helping researchers better understand how humans listen to and learn from music.

        ---

        What are the possible disadvantages and risks of taking part?

        Because this study will involve listening to audio for an extended time, some participants may become tired or bored during the study. To minimise any risk from this, you are allowed to stop the study at any time for any reason after which you may continue or withdraw from the study with no penalties or detrimental effects.

        If participants set their personal device to a very high volume, the audio in the study may be uncomfortable or painful to listen to. To prevent this risk, you will be advised to set the volume on your device to a comfortable level before hearing any audio.

        ---

        Expenses and payments:

        You will not incur any expenses from participating in this study.

        For the time you spend taking part in this study, you will be awarded an appropriate monetary amount as specific by Prolific’s payment guidelines (this amount is currently set to a minimum of £6 GBP per hour). This amount will be sent to you via Prolific’s services in an appropriate amount of time after you complete the study.

        ---

        What information about me will you be collecting?

        We will collect data regarding some basic demographic information from your Prolific user account: This will include your age, gender, and nationality where any of these are provided. We will also collect data from your multiple-choice responses to questions asked during the study.

        ---

        How will my data be stored and who will have access to it?

        Your data will be stored in fully anonymised format on a secure server located at Queen Mary University of London, and only Adam Andrew Garrow and Marcus Pearce will be able to access it.

        ---

        When and how will my data be destroyed?

        A copy of your data will be permanently stored in The Archives at Queen Mary University of London 5 calendar years after the end date of the study and after review by an Archivist.

        ---

        How will my data be used and shared?

        Results of this study using your data will be reported in a submission to a peer-reviewed journal and in part of a PhD dissertation. Additionally, your data will be shared in an appropriate external open access repository. Your data will only ever be used and shared in an anonymised format.

        ---

        Under what legal basis are you collecting this information?

        Queen Mary University of London processes personal data for research purposes in accordance with the lawful basis of ‘public task’.

        Please read Queen Mary’s privacy notice for research participants containing important information about your personal data and your rights in this respect. If you have any questions relating to data protection, please contact Queen Mary’s Data Protection Officer, Queens’ Building, Mile End Road, London, E1 4NS or data-protection@qmul.ac.uk or 020 7882 7596.

        ---

        What will happen if I want to withdraw from this study?

        You are allowed to withdraw your participation in the study at any time without providing a reason.

        If you choose to stop taking part in the study early, any data collected from you up to the time of withdrawal will be confidentially destroyed.

        If you complete the full study, your data will be immediately anonymised following which you will not be able to request access to or withdraw the information you have provided.

        ---

        What should I do if I have any concerns about this study?

        If you have any concerns about the manner in which the study was conducted, in the first instance, please contact the researcher(s) responsible for the study (Marcus Pearce). If you have a complaint which you feel you cannot discuss with the researchers then you should contact the Research Ethics Facilitators by e-mail: research-ethics@qmul.ac.uk. When contacting the Research Ethics Facilitators, please provide details of the study title, description of the study and QMERC reference number (where possible), the researcher(s) involved, and details of the complaint you wish to make.

        ---

        Who can I contact if I have any questions about this study?

        Adam Andrew Garrow
        a.a.garrow@qmul.ac.uk

        Marcus Pearce
        marcus.pearce@qmul.ac.uk
    MouseComponent mouse_finishedReading
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent code_scrollText
      Code Type = JS
      Each JS Frame:
        oldY = textbox_infoSheet.pos[1];
        deltaY = (psychopy.event.Mouse.getWheelRel()[1] * 3);
        newY = (oldY + deltaY);
        textbox_infoSheet.pos = [0, newY];
  Routine debug
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    TextComponent text_participantNumCheck
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = $expInfo['participant']
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  Routine volume_adjust
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    SoundComponent sound_highFreq
      hamming = False
      sound [set every repeat] = $'participant_'+str(expInfo['participant'])+'_high_freq_vol_adj.wav'
      startVal [time (s)] = 99999
      stopWithRoutine = False
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    SoundComponent sound_lowFreq
      hamming = False
      sound [set every repeat] = $'participant_'+str(expInfo['participant'])+'_low_freq_vol_adj.wav'
      startVal [time (s)] = 99999
      stopWithRoutine = False
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    MouseComponent mouse_nextPageVolAdjust
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    ButtonComponent button_highFreq
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (-0.35, 0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = Play high pitch
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    ButtonComponent button_lowFreq
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (0.35, 0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = Play low pitch
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    ButtonComponent button_continue
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.5, 0.5)
      startVal [time (s)] = 99999
      text = Next
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    CodeComponent code_buttonPresses
      Code Type = JS
      Begin JS Routine:
        let button_clicked = false;
        let stimulus_onset_time = null;
        let current_sound = null;

        button_highFreq_pressed = false;
        button_lowFreq_pressed = false;

        button_continue.setAutoDraw(false); // Ensure it's not visible
        button_continue.enabled = false;   // Disable interactivity
        continue_button_works = false;
      Each JS Frame:
        if (mouse_nextPageVolAdjust.isPressedIn(button_highFreq) && !button_clicked) {
            if (sound_highFreq.status === PsychoJS.Status.STARTED) {
                sound_highFreq.stop();
            }
            if (sound_lowFreq.status === PsychoJS.Status.STARTED) {
                sound_lowFreq.stop();
            }
            stimulus_onset_time = t + 0.1; // 100 ms delay
            button_clicked = true;
            button_highFreq_pressed = true;
            current_sound = sound_highFreq;
        }

        if (mouse_nextPageVolAdjust.isPressedIn(button_lowFreq) && !button_clicked) {
            if (sound_highFreq.status === PsychoJS.Status.STARTED) {
                sound_highFreq.stop();
            }
            if (sound_lowFreq.status === PsychoJS.Status.STARTED) {
                sound_lowFreq.stop();
            }
            stimulus_onset_time = t + 0.1; // 100 ms delay
            button_clicked = true;
            button_lowFreq_pressed = true;
            current_sound = sound_lowFreq;
        }

        // Check if it's time to present the stimulus
        if (button_clicked && t >= stimulus_onset_time) {
            if (current_sound && current_sound.status !== PsychoJS.Status.STARTED) {
                current_sound.play();
            }
            button_clicked = false;
        }
    TextComponent text_volAdjustShort
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Adjust the volume on your device to a comfortable level, ensuring you can hear both sounds clearly.
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    CodeComponent code_nextPageVolAdjust
      Code Type = JS
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      Begin JS Routine:
        clickTrigger = 0;
      Each JS Frame:
        if (!button_continue.enabled && button_highFreq_pressed && button_lowFreq_pressed) {
            button_continue.setAutoDraw(true); // Show the button
            button_continue.enabled = true;   // Enable interactivity
            text_volAdjustShort2.setAutoDraw(true);
            continue_button_works = true;
            mouse_nextPageVolAdjust.clickReset(); // Prevents clicks on hidden button being registered
        }

        // Check for left mouse press within button area
        if (mouse_nextPageVolAdjust.isPressedIn(button_continue) && clickTrigger === 0 && mouse_nextPageVolAdjust.getPressed()[0]) {
            clickTrigger = 1; // state when mouse is pressed and held on button
            pressingTime = t;
        }

        if (clickTrigger === 1 && !button_continue.contains(mouse_nextPageVolAdjust)) {
            clickTrigger = 2; // state when mouse is pressed on button (held) and then moved off button (while holding)
        }

        if (mouse_nextPageVolAdjust.getPressed()[0] && !button_continue.contains(mouse_nextPageVolAdjust)) {
            clickTrigger = 2; // state when mouse is pressed but not on button (prevents off-button presses activating button)
        }

        if (clickTrigger === 2 && !mouse_nextPageVolAdjust.getPressed()[0]) {
            clickTrigger = 0; // resets mouse so new click required to press button
        }

        if (!mouse_nextPageVolAdjust.isPressedIn(button_continue) && button_continue.contains(mouse_nextPageVolAdjust) && t > pressingTime && clickTrigger === 1) {
            clickTrigger = 3; // state when button is pressed and released without moving off button
        }

        if (clickTrigger === 3 && continue_button_works) {
            clickTrigger = 0; // resets clickTrigger
            continueRoutine = false; // completes routine
        }
    TextComponent text_debugClicks
      disabled = True
      letterHeight = 0.05
      pos = (0.0, -0.3)
      startVal [time (s)] = 0.0
      text [set every frame] = $clickTrigger
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    TextComponent text_volAdjustShort2
      letterHeight = 0.05
      pos = (0, -0.15)
      startVal [time (s)] = 99999
      text = Click 'Next' when you have finished adjusting your volume.
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  Routine choice_reset
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    CodeComponent code_choiceReset
      Code Type = JS
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      Begin JS Experiment:
        button_familiar.numClicks = 0;
        button_unfamiliar.numClicks = 0;
      Begin JS Routine:
        button_familiar.numClicks = 0;
        button_unfamiliar.numClicks = 0;
  Routine test_clicks_file_load
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    CodeComponent code_testClickNum
      Code Type = JS
      Begin JS Routine:
        // begin expt
        testTrialCounter = 0;
        nthTestAttentionTrial = 3; // how many trials should happen before each attention trial

        // begin routine
        testTrialCounter += 1;

        if (testTrialCounter === 80 || testTrialCounter % nthTestAttentionTrial !== 0) {
            let click_num = Math.floor(Math.random() * 5) + 1;
            curr_click_num[0] = click_num // pushes dummy value to curr_click_num on non-attention trials
            continueRoutine = false;
        } else {
            let click_num = Math.floor(Math.random() * 5) + 1;
            used_click_numbers.push(click_num);
            curr_click_num[0] = click_num;
        }
  Routine volume_adjust_text
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    TextComponent text_volAdjustLong
      letterHeight = 0.045
      pos = (0, 0.08)
      startVal [time (s)] = 0.0
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      text:
        Thank you for completing the initial headphone checks.

        On the next page, you will be given the opportunity to set the sound levels for the remainder of the study to a comfortable volume, using two example sounds (a low pitch and a high pitch). Please ensure you can hear both sounds clearly at your chosen volume.

        Click 'Next' when you are ready to proceed.
    ButtonComponent button_nextPageVolAdjustText
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (0, -0.32)
      save = first click
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = Next
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    MouseComponent mouse_nextPageVolAdjustText
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent code_nextPageVolAdjustText
      Code Type = JS
      Begin JS Routine:
        clickTrigger = 0;
        routineStartTime = t;
        waitTime = 3;
      Each JS Frame:
        if ((t - routineStartTime) > waitTime) {

            // Check for left mouse press within button area
            if (mouse_nextPageVolAdjustText.isPressedIn(button_nextPageVolAdjustText) && clickTrigger === 0 && mouse_nextPageVolAdjustText.getPressed()[0]) {
                clickTrigger = 1; // state when mouse is pressed and held on button
                pressingTime = t;
            }

            if (clickTrigger === 1 && !button_nextPageVolAdjustText.contains(mouse_nextPageVolAdjustText)) {
                clickTrigger = 2; // state when mouse is pressed on button (held) and then moved off button (while holding)
            }

            if (mouse_nextPageVolAdjustText.getPressed()[0] && !button_nextPageVolAdjustText.contains(mouse_nextPageVolAdjustText)) {
                clickTrigger = 2; // state when mouse is pressed but not on button (prevents off-button presses activating button)
            }

            if (clickTrigger === 2 && !mouse_nextPageVolAdjustText.getPressed()[0]) {
                clickTrigger = 0; // resets mouse so new click required to press button
            }

            if (!mouse_nextPageVolAdjustText.isPressedIn(button_nextPageVolAdjustText) && button_nextPageVolAdjustText.contains(mouse_nextPageVolAdjustText) && t > pressingTime && clickTrigger === 1) {
                clickTrigger = 3; // state when button is pressed and released without moving off button
            }

            if (clickTrigger === 3) {
                clickTrigger = 0; // resets clickTrigger
                continueRoutine = false; // completes routine
            }
        }
  Routine attention_instructions
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    CodeComponent code
      Code Type = JS
      Begin JS Routine:
        if (trialCounter === 80 || trialCounter % nth_attention_trial !== 0) {
            continueRoutine = false;
        }
    TextComponent text_attentionInstructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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  Routine play_mp3
    RoutineSettingsComponent play_mp3
      disabled = True
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    TextComponent text_mp3
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10.1
      text = This is the mp3 playback.
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    SoundComponent sound_mp3
      hamming = False
      sound [set every repeat] = sounds/reveille.mp3
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 10.0
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  Routine play_wav
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    TextComponent text_wav
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10.1
      text = This is the wav playback.
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    SoundComponent sound_wav
      hamming = False
      sound [set every repeat] = sounds/reveille.wav
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 10.0
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  Routine headphone_calibrate
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    TextComponent text_headphoneCalibrate
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        Welcome to the study! Please now put on your headphones (or earphones).

        Click 'Play' to play a test sound to check your volume is working properly.
    CodeComponent code_headphoneCalibrate
      Code Type = JS
      Begin JS Routine:
        clickTrigger = 0;
        playTrigger = 0;
        startTime = null;
        routineStartTime = t;
        waitTime = 1;

        button_headphoneCalibrateCont.setAutoDraw(false); // Ensure it's not visible
        button_headphoneCalibrateCont.enabled = false;   // Disable interactivity
        continue_button_works = false;
      Each JS Frame:
        if ((t - routineStartTime) > waitTime) {

            // Check for left mouse press within button area
            if (mouse_headphoneCalibrate.isPressedIn(button_headphoneCalibratePlay) && playTrigger === 0 && mouse_headphoneCalibrate.getPressed()[0]) {
                playTrigger = 1; // state when mouse is pressed and held on button
                pressingTimeA = t;
            }

            if (playTrigger === 1 && !button_headphoneCalibratePlay.contains(mouse_headphoneCalibrate)) {
                playTrigger = 2; // state when mouse is pressed on button (held) and then moved off button (while holding)
            }

            if (mouse_headphoneCalibrate.getPressed()[0] && !button_headphoneCalibratePlay.contains(mouse_headphoneCalibrate)) {
                if (((t - startTime) < sound_headphoneCalibrate.getDuration()) && startTime !== null) {
                    playTrigger = 3;
                } else {
                    playTrigger = 2; // state when mouse is pressed but not on button (prevents off-button presses activating button)
                }
            }

            if (playTrigger === 2 && !mouse_headphoneCalibrate.getPressed()[0]) {
                playTrigger = 0; // resets mouse so new click required to press button
            }

            if (!mouse_headphoneCalibrate.isPressedIn(button_headphoneCalibratePlay) && button_headphoneCalibratePlay.contains(mouse_headphoneCalibrate) && t > pressingTimeA && playTrigger === 1) {
                if (sound_headphoneCalibrate.status !== PsychoJS.Status.STARTED) {
                    playTrigger = 3;
                    sound_headphoneCalibrate.play(); // Start playing the sound
                    startTime = t
                }
            }

            // Check the status of the sound in each frame
            if (playTrigger === 3 && (t - startTime) >= sound_headphoneCalibrate.getDuration()) {
                playTrigger = 0; // resets playTrigger after sound has finished playing
                sound_headphoneCalibrate.stop();
                pressingTimeA = null;
                if (!button_headphoneCalibrateCont.enabled) {
                    button_headphoneCalibrateCont.setAutoDraw(true); // Show the button
                    button_headphoneCalibrateCont.enabled = true;   // Enable interactivity
                    text_headphoneCalibrate2.setAutoDraw(true);
                    continue_button_works = true;
                    mouse_headphoneCalibrate.clickReset(); // Prevents clicks on hidden button being registered
                }
            }

            // Check for left mouse press within button area
            if (mouse_headphoneCalibrate.isPressedIn(button_headphoneCalibrateCont) && clickTrigger === 0 && mouse_headphoneCalibrate.getPressed()[0]) {
                clickTrigger = 1; // state when mouse is pressed and held on button
                pressingTimeB = t;
            }

            if (clickTrigger === 1 && !button_headphoneCalibrateCont.contains(mouse_headphoneCalibrate)) {
                clickTrigger = 2; // state when mouse is pressed on button (held) and then moved off button (while holding)
            }

            if (mouse_headphoneCalibrate.getPressed()[0] && !button_headphoneCalibrateCont.contains(mouse_headphoneCalibrate)) {
                clickTrigger = 2; // state when mouse is pressed but not on button (prevents off-button presses activating button)
            }

            if (clickTrigger === 2 && !mouse_headphoneCalibrate.getPressed()[0]) {
                clickTrigger = 0; // resets mouse so new click required to press button
                pressingTimeB = null;
            }

            if (!mouse_headphoneCalibrate.isPressedIn(button_headphoneCalibrateCont) && button_headphoneCalibrateCont.contains(mouse_headphoneCalibrate) && t > pressingTimeB && clickTrigger === 1) {
                clickTrigger = 3; // state when button is pressed and released without moving off button
            }

            if (clickTrigger === 3 && continue_button_works) {
                continueRoutine = false; // completes routine
            }
        }
      End JS Routine:
        clickTrigger = 0;
        playTrigger = 0;
        startTime = null;
        pressingTimeA = null;
        pressingTimeB = null;
    ButtonComponent button_headphoneCalibratePlay
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = Play
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    ButtonComponent button_headphoneCalibrateCont
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.5, 0.5)
      startVal [time (s)] = 99999
      text = Next
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    MouseComponent mouse_headphoneCalibrate
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    SoundComponent sound_headphoneCalibrate
      hamming = False
      sound [set every repeat] = HugginsPitch_calibration.flac
      startVal [time (s)] = 99999
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    TextComponent text_debugHeadphoneCalibratePlay
      disabled = True
      letterHeight = 0.05
      pos = (0.4, -0.4)
      startVal [time (s)] = 0.0
      text [set every frame] = $playTrigger
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    TextComponent text_debugHeadphoneCalibrateCont
      disabled = True
      letterHeight = 0.05
      pos = (-0.4, -0.4)
      startVal [time (s)] = 0.0
      text [set every frame] = $clickTrigger
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    TextComponent text_headphoneCalibrate2
      letterHeight = 0.04
      pos = (0, -0.2)
      startVal [time (s)] = 99999
      text = Click 'Next' to move to the next page.
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  Routine headphone_example
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    TextComponent text_headphoneExample
      letterHeight = 0.035
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        On the next few pages, you will hear a series of sounds. You will only hear each sound once, so please listen closely.

        Each sound contains three noises with silent gaps in-between. One of the noises has a faint beep hidden within.

        Your task is to decide which of the three noises contains the beep, and click on the correct button: 1, 2, or 3.

        Click 'Play' to hear an example. The beep is hidden inside the second noise, so the answer is 2. You can play the example as many times as you like.
    SoundComponent sound_headphoneExample
      hamming = False
      sound [set every repeat] = HugginsPitch_example_2.flac
      startVal [time (s)] = 99999
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    ButtonComponent button_headphoneExamplePlay
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (0, -0.12)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = Play
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    MouseComponent mouse_headphoneExample
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    ButtonComponent button_headphoneExampleCont
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (0, -0.35)
      size = (0.5, 0.5)
      startVal [time (s)] = 99999
      text = Next
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    CodeComponent code_headphoneExample
      Code Type = JS
      Begin JS Routine:
        clickTrigger = 0;
        playTrigger = 0;
        startTime = null;
        routineStartTime = t;
        waitTime = 3;

        button_headphoneExampleCont.setAutoDraw(false); // Ensure it's not visible
        button_headphoneExampleCont.enabled = false;   // Disable interactivity
        continue_button_works = false;
      Each JS Frame:
        if ((t - routineStartTime) > waitTime) {

            // Check for left mouse press within button area
            if (mouse_headphoneExample.isPressedIn(button_headphoneExamplePlay) && playTrigger === 0 && mouse_headphoneExample.getPressed()[0]) {
                playTrigger = 1; // state when mouse is pressed and held on button
                pressingTimeA = t;
            }

            if (playTrigger === 1 && !button_headphoneExamplePlay.contains(mouse_headphoneExample)) {
                playTrigger = 2; // state when mouse is pressed on button (held) and then moved off button (while holding)
            }

            if (mouse_headphoneExample.getPressed()[0] && !button_headphoneExamplePlay.contains(mouse_headphoneExample)) {
                if (((t - startTime) < sound_headphoneExample.getDuration()) && startTime !== null) {
                    playTrigger = 3;
                } else {
                    playTrigger = 2; // state when mouse is pressed but not on button (prevents off-button presses activating button)
                }
            }

            if (playTrigger === 2 && !mouse_headphoneExample.getPressed()[0]) {
                playTrigger = 0; // resets mouse so new click required to press button
            }

            if (!mouse_headphoneExample.isPressedIn(button_headphoneExamplePlay) && button_headphoneExamplePlay.contains(mouse_headphoneExample) && t > pressingTimeA && playTrigger === 1) {
                if (sound_headphoneExample.status !== PsychoJS.Status.STARTED) {
                    playTrigger = 3;
                    sound_headphoneExample.play(); // Start playing the sound
                    startTime = t
                }
            }

            // Check the status of the sound in each frame
            if (playTrigger === 3 && (t - startTime) >= sound_headphoneExample.getDuration()) {
                playTrigger = 0; // resets playTrigger after sound has finished playing
                sound_headphoneExample.stop();
                pressingTimeA = null;
                if (!button_headphoneExampleCont.enabled) {
                    button_headphoneExampleCont.setAutoDraw(true); // Show the button
                    button_headphoneExampleCont.enabled = true;   // Enable interactivity
                    text_headphoneExample2.setAutoDraw(true);
                    continue_button_works = true;
                    mouse_headphoneExample.clickReset(); // Prevents clicks on hidden button being registered
                }
            }

            // Check for left mouse press within button area
            if (mouse_headphoneExample.isPressedIn(button_headphoneExampleCont) && clickTrigger === 0 && mouse_headphoneExample.getPressed()[0]) {
                clickTrigger = 1; // state when mouse is pressed and held on button
                pressingTimeB = t;
            }

            if (clickTrigger === 1 && !button_headphoneExampleCont.contains(mouse_headphoneExample)) {
                clickTrigger = 2; // state when mouse is pressed on button (held) and then moved off button (while holding)
            }

            if (mouse_headphoneExample.getPressed()[0] && !button_headphoneExampleCont.contains(mouse_headphoneExample)) {
                clickTrigger = 2; // state when mouse is pressed but not on button (prevents off-button presses activating button)
            }

            if (clickTrigger === 2 && !mouse_headphoneExample.getPressed()[0]) {
                clickTrigger = 0; // resets mouse so new click required to press button
                pressingTimeB = null;
            }

            if (!mouse_headphoneExample.isPressedIn(button_headphoneExampleCont) && button_headphoneExampleCont.contains(mouse_headphoneExample) && t > pressingTimeB && clickTrigger === 1) {
                clickTrigger = 3; // state when button is pressed and released without moving off button
            }

            if (clickTrigger === 3 && continue_button_works) {
                continueRoutine = false; // completes routine
            }
        }
      End JS Routine:
        clickTrigger = 0;
        playTrigger = 0;
        startTime = null;
        pressingTimeA = 0;
        pressingTimeB = 0;
    TextComponent text_debugHeadphoneExamplePlay
      disabled = True
      letterHeight = 0.05
      pos = (0.4, -0.4)
      startVal [time (s)] = 0.0
      text [set every frame] = $playTrigger
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    TextComponent text_debugHeadphoneExampleCont
      disabled = True
      letterHeight = 0.05
      pos = (-0.4, -0.4)
      startVal [time (s)] = 0.0
      text [set every frame] = $clickTrigger
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    TextComponent text_headphoneExample2
      letterHeight = 0.035
      pos = (0, -0.25)
      startVal [time (s)] = 99999
      text = Click 'Next' when you are ready to begin the test.
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  Routine headphone_check
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    CodeComponent code_headphoneCheck
      Code Type = JS
      Begin JS Experiment:
        correct_file = [];
        huggins_trial_counter = 0;
      Begin JS Routine:
        huggins_trial_counter += 1
        correct_file = Math.floor(Math.random() * 3) + 1;
        startTime = null

        //audioFilePath = 'sounds/HugginsPitch_set' + huggins_trial_counter + '_' + correct_file + '.flac'; // With sounds ext.
        //audioFilePath = 'HugginsPitch_set' + huggins_trial_counter + '_' + correct_file + '.flac'; // Without sounds ext.
        //audioFilePath = `${GCS_SOUNDS_URL} + 'HugginsPitch_set' + huggins_trial_counter + '_' + correct_file + '.flac'` // As full URL
        //audioFilePath = `${GCS_SOUNDS_URL}HugginsPitch_set{huggins_trial_counter}_{correct_file}.flac`
      Each JS Frame:
        //if (t >= 0.1 && sound_huggins.status === PsychoJS.Status.NOT_STARTED) {
        //    sound_huggins.play();
        //    startTime = t;
        //}

        if (t >= 3 && sound_huggins.status === PsychoJS.Status.NOT_STARTED) {
            sound_huggins.play();
            startTime = t;
        }

        if ((t - startTime) >= sound_huggins.getDuration() && startTime !== null) {
            sound_huggins.stop();
            continueRoutine = false;
        }
      End JS Routine:
        psychoJS.experiment.addData('hugginsFileName', audioFilePath);

        audioFilePath = null;
    TextComponent text_debugHeadphoneCheck
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.1
      text [set every frame] = $audioFilePath
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    SoundComponent sound_huggins
      hamming = False
      sound [set every repeat] = $'HugginsPitch_set'+str(huggins_trial_counter)+'_'+str(correct_file)+'.flac'
      startVal [time (s)] = 99999
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    TextComponent text_headphoneCheck
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      text = Please listen carefully to the audio.
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    TextComponent text_clock
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every frame] = $'The audio will play in ' + Math.max(0, Math.round(3 - t)) + ' seconds'
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  Routine headphone_choice
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    ButtonComponent button_huggins_1
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (-.15, -0.1)
      size = (0.1, 0.2)
      startVal [time (s)] = 0
      text = 1
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    ButtonComponent button_huggins_2
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (0, -0.1)
      size = (0.1, 0.2)
      startVal [time (s)] = 0
      text = 2
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    ButtonComponent button_huggins_3
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (0.15, -0.1)
      size = (0.1, 0.2)
      startVal [time (s)] = 0
      text = 3
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    CodeComponent code_hugginsChoice
      Code Type = JS
      Begin JS Experiment:
        correct_huggins_trials = 0;
      Begin JS Routine:
        clickTrigger = 0;
        i = 0;
        buttonChoice = null;
        startTime = null;
        routineStartTime = t;
        waitTime = 0.5;
      Each JS Frame:
        if ((t - routineStartTime) > waitTime) {

            // Array to hold all button references
            let buttons = [button_huggins_1, button_huggins_2, button_huggins_3];

            // Check for left mouse press within button area
            for (let i = 0; i < buttons.length; i++) {
                if (mouse_hugginsChoice.isPressedIn(buttons[i]) && clickTrigger === 0 && mouse_hugginsChoice.getPressed()[0]) {
                    clickTrigger = 1; // state when mouse is pressed and held on button
                    pressingTime = t;
                    buttonChoice = buttons[i]; // Assign choice based on button mapping
                    break; // Exit the loop once a button is pressed
                }
            }

            if (clickTrigger === 1) {
                if (!buttonChoice.contains(mouse_hugginsChoice)) {
                    clickTrigger = 2;
                    buttonChoice = null; // state when mouse is pressed on button (held) and then moved off button (while holding)
                }
            }

            if (mouse_hugginsChoice.getPressed()[0] && buttons.every(button => !button.contains(mouse_hugginsChoice))) {
                clickTrigger = 2;
                buttonChoice = null; // State when mouse is pressed but not on button (prevents off-button presses activating button)
            }

            if (clickTrigger === 2 && !mouse_hugginsChoice.getPressed()[0]) {
                clickTrigger = 0; // resets mouse so new click required to press button
                buttonChoice = null;
            }

            if (clickTrigger === 1) {
                if (!mouse_hugginsChoice.isPressedIn(buttonChoice) && buttonChoice.contains(mouse_hugginsChoice) && t > pressingTime) {
                    clickTrigger = 3; // state when button is pressed and released without moving off button
                    buttonChoice.numClicks = 1;
                    continueRoutine = false;
                }
            }
        }
      End JS Routine:
        if (correct_file.toString() === buttonChoice.text) {
            correct_huggins_trials += 1;
        }

        correct_file = [];

        startTime = null;
    MouseComponent mouse_hugginsChoice
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent text_debugHugginsChoice
      disabled = True
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text [set every frame] = $clickTrigger
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    TextComponent text_debughugginsChoice2
      disabled = True
      letterHeight = 0.05
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text [set every frame] = $correct_file
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    TextComponent text_hugginsChoice
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = Which of the three noises contained the beep?
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  Routine headphone_pass_check
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    CodeComponent code_headphonePassCheck
      Code Type = JS
      Begin JS Routine:
        if (huggins_trial_counter - correct_huggins_trials < 2) {
            continueRoutine = false;
        }
    TextComponent text_compFail
      letterHeight = 0.05
      pos = (0, 0.10)
      startVal [time (s)] = 0.0
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      text:
        Based on your responses, you are not eligible to continue with the remainder of the study. However, we appreciate your time and effort and you will be compensated for the time you have spent so far.

        Please click the button below to be redirected to the Pavlovia study page and complete your submission.
    ButtonComponent button_compFail
      bold = True
      callback = window.location.href = "https://app.prolific.com/submissions/complete?cc=C1LF197M";
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (0, -0.30)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = Finish
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  Routine attention_debug
    RoutineSettingsComponent attention_debug
      disabled = True
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    TextComponent text_debugAttention
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every frame] = $failed_attention_trials
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  Routine test_attention_choice
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    ButtonComponent button_attention_1
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (-0.3, -0.1)
      size = (0.1, 0.2)
      startVal [time (s)] = 0
      text = 1
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    ButtonComponent button_attention_2
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (-.15, -0.1)
      size = (0.1, 0.2)
      startVal [time (s)] = 0
      text = 2
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    ButtonComponent button_attention_3
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (0, -0.1)
      size = (0.1, 0.2)
      startVal [time (s)] = 0
      text = 3
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    ButtonComponent button_attention_4
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (0.15, -0.1)
      size = (0.1, 0.2)
      startVal [time (s)] = 0
      text = 4
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    ButtonComponent button_attention_5
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (0.3, -0.1)
      size = (0.1, 0.2)
      startVal [time (s)] = 0
      text = 5
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    TextComponent text_beepNumber
      letterHeight = 0.05
      pos = (0, .1)
      startVal [time (s)] = 0.0
      text = How many beeps did you hear in the audio clip?
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    CodeComponent code_skipChoice
      Code Type = JS
      Begin JS Routine:
        if (testTrialCounter === num_test_melodies || testTrialCounter % nthTestAttentionTrial !== 0) {
            button_attention_1.numClicks = 0;
            button_attention_2.numClicks = 0;
            button_attention_3.numClicks = 0;
            button_attention_4.numClicks = 0;
            button_attention_5.numClicks = 0;
            continueRoutine = false;
        }
    CodeComponent code_attentionChoice
      Code Type = JS
      Begin JS Routine:
        clickTrigger = 0;
        i = 0;
        buttonChoice = null;
      Each JS Frame:
        // Array to hold all button references
        let buttons = [button_attention_1, button_attention_2, button_attention_3, button_attention_4, button_attention_5];

        // Check for left mouse press within button area
        for (let i = 0; i < buttons.length; i++) {
            if (mouse_attentionChoice.isPressedIn(buttons[i]) && clickTrigger === 0 && mouse_attentionChoice.getPressed()[0]) {
                clickTrigger = 1; // state when mouse is pressed and held on button
                pressingTime = t;
                buttonChoice = buttons[i]; // Assign choice based on button mapping
                break; // Exit the loop once a button is pressed
            }
        }

        if (clickTrigger === 1) {
            if (!buttonChoice.contains(mouse_attentionChoice) && !buttonChoice.contains(mouse_attentionChoice)) {
                clickTrigger = 2;
                buttonChoice = null; // state when mouse is pressed on button (held) and then moved off button (while holding)
            }
        }

        if (mouse_attentionChoice.getPressed()[0] && buttons.every(button => !button.contains(mouse_attentionChoice))) {
            clickTrigger = 2;
            buttonChoice = null; // State when mouse is pressed but not on button (prevents off-button presses activating button)
        }

        if (clickTrigger === 2 && !mouse_attentionChoice.getPressed()[0]) {
            clickTrigger = 0; // resets mouse so new click required to press button
            buttonChoice = null;
        }

        if (clickTrigger === 1) {
            if (!mouse_attentionChoice.isPressedIn(buttonChoice) && buttonChoice.contains(mouse_attentionChoice) && t > pressingTime) {
                clickTrigger = 3; // state when button is pressed and released without moving off button
                buttonChoice.numClicks = 1;
                continueRoutine = false;
            }
        }
      End JS Routine:
        if (clickTrigger === 3 &&
            typeof curr_click_num !== 'undefined' &&
            curr_click_num.toString() !== buttonChoice.text) {
            // Adjust so checks if attention choice is correct
                failed_attention_trials += 1;
        }
    MouseComponent mouse_attentionChoice
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent text_debugAttentionChoice
      disabled = True
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text [set every frame] = $curr_click_num
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  Routine test_attention_reset
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    CodeComponent code_testAttentionReset
      Code Type = JS
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      Begin JS Experiment:
        button_attention_1.numClicks = 0;
        button_attention_2.numClicks = 0;
        button_attention_3.numClicks = 0;
        button_attention_4.numClicks = 0;
        button_attention_5.numClicks = 0;
      Begin JS Routine:
        button_attention_1.numClicks = 0;
        button_attention_2.numClicks = 0;
        button_attention_3.numClicks = 0;
        button_attention_4.numClicks = 0;
        button_attention_5.numClicks = 0;
        curr_click_num = []; // empties the array after every trial
  Routine exp_attention_choice
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    ButtonComponent button_expAttention1
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (-0.3, -0.1)
      size = (0.1, 0.2)
      startVal [time (s)] = 0
      text = 1
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    ButtonComponent button_expAttention2
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (-.15, -0.1)
      size = (0.1, 0.2)
      startVal [time (s)] = 0
      text = 2
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    ButtonComponent button_expAttention3
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (0, -0.1)
      size = (0.1, 0.2)
      startVal [time (s)] = 0
      text = 3
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    ButtonComponent button_expAttention4
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (0.15, -0.1)
      size = (0.1, 0.2)
      startVal [time (s)] = 0
      text = 4
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    ButtonComponent button_expAttention5
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (0.3, -0.1)
      size = (0.1, 0.2)
      startVal [time (s)] = 0
      text = 5
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    TextComponent text_expBeepNumber
      letterHeight = 0.05
      pos = (0, .1)
      startVal [time (s)] = 0.0
      text = How many beeps did you hear in the audio clip?
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    CodeComponent code_expSkipChoice
      Code Type = JS
      Begin JS Routine:
        if (expTrialCounter === num_exp_melodies || expTrialCounter % nthExpAttentionTrial !== 0) {
            button_expAttention1.numClicks = 0;
            button_expAttention2.numClicks = 0;
            button_expAttention3.numClicks = 0;
            button_expAttention4.numClicks = 0;
            button_expAttention5.numClicks = 0;
            continueRoutine = false;
        }
    CodeComponent code_expAttentionChoice
      Code Type = JS
      Begin JS Experiment:
        failed_attention_trials = 0;
      Begin JS Routine:
        clickTrigger = 0;
        i = 0;
        buttonChoice = null;
      Each JS Frame:
        // Array to hold all button references
        let buttons = [button_expAttention1, button_expAttention2, button_expAttention3, button_expAttention4, button_expAttention5];

        // Check for left mouse press within button area
        for (let i = 0; i < buttons.length; i++) {
            if (mouse_expAttentionChoice.isPressedIn(buttons[i]) && clickTrigger === 0 && mouse_expAttentionChoice.getPressed()[0]) {
                clickTrigger = 1; // state when mouse is pressed and held on button
                pressingTime = t;
                buttonChoice = buttons[i]; // Assign choice based on button mapping
                break; // Exit the loop once a button is pressed
            }
        }

        if (clickTrigger === 1) {
            if (!buttonChoice.contains(mouse_expAttentionChoice)) {
                clickTrigger = 2;
                buttonChoice = null; // state when mouse is pressed on button (held) and then moved off button (while holding)
            }
        }

        if (mouse_expAttentionChoice.getPressed()[0] && buttons.every(button => !button.contains(mouse_expAttentionChoice))) {
            clickTrigger = 2;
            buttonChoice = null; // State when mouse is pressed but not on button (prevents off-button presses activating button)
        }

        if (clickTrigger === 2 && !mouse_expAttentionChoice.getPressed()[0]) {
            clickTrigger = 0; // resets mouse so new click required to press button
            buttonChoice = null;
        }

        if (clickTrigger === 1) {
            if (!mouse_expAttentionChoice.isPressedIn(buttonChoice) && buttonChoice.contains(mouse_expAttentionChoice) && t > pressingTime) {
                clickTrigger = 3; // state when button is pressed and released without moving off button
                buttonChoice.numClicks = 1;
                continueRoutine = false;
            }
        }
      End JS Routine:
        if (clickTrigger === 3 &&
            typeof curr_click_num !== 'undefined' &&
            curr_click_num.toString() !== buttonChoice.text) {
            // Adjust so checks if attention choice is correct
            failed_attention_trials += 1;
        }
    MouseComponent mouse_expAttentionChoice
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent text_debugExpAttentionChoice
      disabled = True
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text [set every frame] = $curr_click_num
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  Routine exp_attention_reset
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    CodeComponent code_expAttentionReset
      Code Type = JS
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      Begin JS Experiment:
        button_expAttention1.numClicks = 0;
        button_expAttention2.numClicks = 0;
        button_expAttention3.numClicks = 0;
        button_expAttention4.numClicks = 0;
        button_expAttention5.numClicks = 0;
      Begin JS Routine:
        button_expAttention1.numClicks = 0;
        button_expAttention2.numClicks = 0;
        button_expAttention3.numClicks = 0;
        button_expAttention4.numClicks = 0;
        button_expAttention5.numClicks = 0;
        curr_click_num = []; // empties the array after every trial
      End JS Routine:
        /*if (failed_attention_trials === 2) {
            window.location.href = "https://app.prolific.com/submissions/complete?cc=C1LH7GW7";
        }*/
  Routine exp_clicks_file_loading
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    CodeComponent code_expClickNum
      Code Type = JS
      Begin JS Experiment:
        used_click_numbers = [];
        curr_click_num = []; // To store the number of clicks for the next audio across routines
                             // (the value is changed with each new attention trial)
        expTrialCounter = 0;
        nthExpAttentionTrial = 25; // how many trials should happen before each attention trial
      Begin JS Routine:
        expTrialCounter += 1;

        if (expTrialCounter === num_exp_melodies || expTrialCounter % nthExpAttentionTrial !== 0) {
            let click_num = Math.floor(Math.random() * 5) + 1;
            curr_click_num[0] = click_num // pushes dummy value to curr_click_num on non-attention trials
            continueRoutine = false;
        } else {
            let click_num = Math.floor(Math.random() * 5) + 1;
            used_click_numbers.push(click_num);
            curr_click_num[0] = click_num;
        }
  Routine test_clicks_file_loading
    RoutineSettingsComponent test_clicks_file_loading
      saveStartStop = False
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    CodeComponent code_testClickNum_2
      Code Type = JS
      Begin JS Experiment:
        testTrialCounter = 0;
        nthTestAttentionTrial = 20; // how many trials should happen before each attention trial
      Begin JS Routine:
        testTrialCounter += 1;

        if (testTrialCounter === num_test_melodies || testTrialCounter % nthTestAttentionTrial !== 0) {
            let click_num = Math.floor(Math.random() * 5) + 1;
            curr_click_num[0] = click_num // pushes dummy value to curr_click_num on non-attention trials
            continueRoutine = false;
        } else {
            let click_num = Math.floor(Math.random() * 5) + 1;
            used_click_numbers.push(click_num);
            curr_click_num[0] = click_num;
        }
  Routine test_attention_playback
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    CodeComponent code_testAttentionPlayback
      Code Type = JS
      Begin JS Routine:
        audioFilePath = 'participant_' + expInfo['participant'] + '_'+ curr_click_num + '_clicks_audio.wav';

        sound_attentionClicks = new sound.Sound({
            win: psychoJS.window,
            value: audioFilePath,
            secs: (- 1),
        });
        sound_attentionClicks.setVolume(1.0);
        sound_attentionClicks.tStart = 0.1;

        if (testTrialCounter === num_test_melodies || testTrialCounter % nthTestAttentionTrial !== 0) {
            continueRoutine = false;
        } else {
            psychoJS.experiment.addData('attentionFileName', audioFilePath);
        }
      Each JS Frame:
        if (t >= 0.1 && sound_attentionClicks.status === PsychoJS.Status.NOT_STARTED) {
            sound_attentionClicks.play();
            sound_attentionClicks.status = PsychoJS.Status.STARTED;
        }
        //if (!audio_played) {
            //if (sound_attentionClicks && sound_attentionClicks.status !== PsychoJS.Status.STARTED) {
                //sound_attentionClicks.play();
                //audio_played = true;
                //audio_start_time = t; // Record the time when the audio starts playing
                //text_debug.setText("Playing audio...");
            //}
        //}

        //if (audio_played && (t - audio_start_time >= audio_duration)) {
            // Audio has played for its full duration, end the routine
            //text_debug.setText("");
            //continueRoutine = false;
        //}
    TextboxComponent textbox_debugTestAttentionPlayback
      bold = False
      disabled = True
      editable = False
      letterHeight = 0.05
      pos = (0, 0.4)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $curr_click_num
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    TextboxComponent textbox_debugTestAttentionPlayback2
      bold = False
      disabled = True
      editable = False
      letterHeight = 0.05
      pos = (0, 0.4)
      size = (0.5, 0.5)
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $used_click_numbers
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    TextComponent text_testAttentionPlayback
      letterHeight = 0.05
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 5.4
      text = This is an attention check. Please listen carefully to the audio.
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  Routine exp_attention_playback
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    CodeComponent code_expInitAttention
      Code Type = JS
      Begin JS Routine:
        audioFilePath = 'participant_' + expInfo['participant'] + '_'+ curr_click_num + '_clicks_audio.wav';

        sound_attentionClicks = new sound.Sound({
            win: psychoJS.window,
            value: audioFilePath,
            secs: (- 1),
        });
        sound_attentionClicks.setVolume(1.0);
        sound_attentionClicks.tStart = 0.1;

        if (expTrialCounter === num_exp_melodies || expTrialCounter % nthExpAttentionTrial !== 0) {
            continueRoutine = false;
        } else {
            psychoJS.experiment.addData('attentionFileName', audioFilePath);
        }
      Each JS Frame:
        if (t >= 0.1 && sound_attentionClicks.status === PsychoJS.Status.NOT_STARTED) {
            sound_attentionClicks.play();
            sound_attentionClicks.status = PsychoJS.Status.STARTED;
        }
    TextComponent text_expAttentionPrompt
      letterHeight = 0.05
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 5.4
      text = This is an attention check. Please listen carefully to the audio.
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    TextboxComponent textbox_debugExpAttention
      bold = False
      disabled = True
      editable = False
      letterHeight = 0.05
      pos = (0, 0.4)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $curr_click_num
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    TextboxComponent textbox_debugExpAttention2
      bold = False
      disabled = True
      editable = False
      letterHeight = 0.05
      pos = (0, 0.4)
      size = (0.5, 0.5)
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $used_click_numbers
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  Routine headphone_choice_reset
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    CodeComponent code_headphoneChoiceReset
      Code Type = JS
      Begin JS Experiment:
        button_huggins_1.numClicks = 0;
        button_huggins_2.numClicks = 0;
        button_huggins_3.numClicks = 0;
      Begin JS Routine:
        button_huggins_1.numClicks = 0;
        button_huggins_2.numClicks = 0;
        button_huggins_3.numClicks = 0;
    TextComponent text_debugHeadphonesChoiceReset
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every frame] = $(huggins_trial_counter - correct_huggins_trials)
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  Routine attention_pass_check
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    CodeComponent code_attentionPassCheck
      Code Type = JS
      Begin JS Routine:
        if (failed_attention_trials < 2) {
            continueRoutine = false;
        }
    TextComponent text_attentionFail
      letterHeight = 0.05
      pos = (0, 0.10)
      startVal [time (s)] = 0.0
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      text:
        Based on your responses, you are not eligible to continue with the remainder of the study.

        Please click the button below to be redirected to the Pavlovia study page and complete your submission.
    ButtonComponent button_attentionFail
      bold = True
      callback = window.location.href = "https://app.prolific.com/submissions/complete?cc=C1LH7GW7";
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = Finish
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  Routine clock
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    TextComponent clock_countdownText
      letterHeight = 0.05
      pos = (0, -.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text [set every frame]:
        $Math.max(0, Math.round(10 - t))
    TextComponent clock_displayText
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text = Please wait a moment for the study to finish loading...
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    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 10
      text = Continue
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  Routine send_expt_data
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    CodeComponent code_sendExptData
      Code Type = JS
      Begin JS Routine:
        experimentComplete = true;

        function flattenObject(obj, prefix = '') {
            const flattened = {};
            for (let key in obj) {
                if (obj.hasOwnProperty(key)) {
                    const newKey = prefix ? `${prefix}.${key}` : key; // Add prefix for nested keys
                    const value = obj[key];

                    if (Array.isArray(value)) {
                        // Convert arrays to a string separated by commas
                        flattened[newKey] = value.join(','); // Optionally change this delimiter if needed
                    } else if (typeof value === 'object' && value !== null) {
                        // Recursively flatten nested objects
                        Object.assign(flattened, flattenObject(value, newKey));
                    } else {
                        // Add primitive values directly
                        flattened[newKey] = value;
                    }
                }
            }
            return flattened;
        }

        function trialsDataToCSV(trialsData, delimiter = ',') {
            if (!trialsData || trialsData.length === 0) {
                console.warn('No trial data available to save.');
                return '';
            }

            // Flatten all trial objects
            const flattenedTrials = trialsData.map(trial => flattenObject(trial));

            // Get all unique headers (keys) from the flattened data
            const headers = Array.from(new Set(flattenedTrials.flatMap(trial => Object.keys(trial))));

            // Create the CSV header row
            let csv = headers.join(delimiter) + '\n';

            // Add each trial's data as a row
            flattenedTrials.forEach(trial => {
                const row = headers.map(header => {
                    const value = trial[header] !== undefined ? trial[header] : '';
                    // If value is a string, escape the delimiter (optional but useful)
                    return typeof value === 'string' && value.includes(delimiter)
                        ? `"${value}"`
                        : value;
                });
                csv += row.join(delimiter) + '\n';
            });

            return csv;
        }

        const csvData = trialsDataToCSV(psychoJS.experiment._trialsData, '\t');

        // Disable downloading results to browser
        psychoJS._saveResults = 0;

        // Generate filename for results
        let filename = psychoJS._experiment._experimentName + '_' + psychoJS._experiment._datetime + '_participant_' + paddedParticipantN + '.csv';

        // Send data to OSF via DataPipe
        console.log('Saving data...');
        fetch('https://pipe.jspsych.org/api/data', {
            method: 'POST',
            headers: {
                'Content-Type': 'application/json',
                Accept: '*/*',
            },
            body: JSON.stringify({
                experimentID: 'cs5h7zOkFk24', // ⭑ UPDATE WITH YOUR DATAPIPE EXPERIMENT ID ⭑
                filename: filename,
                data: csvData,
            }),
        }).then(response => response.json())
          .then(data => {
              // Log response
              console.log('Response from server:', data);
          })
          .catch(error => {
              // Handle any errors
              console.error('Error sending data:', error);
          });
  Routine click_redirect
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    TextComponent text_dataWait
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Sending data... Please wait.
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    TextComponent text_redirectPrompt
      letterHeight = 0.05
      pos = (0, 0.15)
      startVal [time (s)] = 5.0
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      text:
        You have now completed the study. Thank you for participating!

        Please click the button to be redirected to the Prolific study page to finish your submission.
    ButtonComponent button_redirectClick
      bold = True
      callback = window.location.href = 'https://app.prolific.com/submissions/complete?cc=CPRPTY9P';
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (0, -0.15)
      size = (0.5, 0.5)
      startVal [time (s)] = 5.0
      text = Click here
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  Routine end_scrap
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    TextComponent text_endScrap
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = This is placeholder text (should not be visible to participants).
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Flow
  Routine init_params
  Routine clock
  Routine headphone_calibrate
  Routine headphone_example
  LoopInitiator trials_huggins loopType="TrialHandler"
    loopType = sequential
    nReps = 6
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    Routine headphone_check
    Routine headphone_choice
    Routine headphone_choice_reset
    Routine headphone_pass_check
  LoopTerminator trials_huggins
  Routine volume_adjust_text
  Routine volume_adjust
  Routine welcome_screen
  Routine pre_exp
  LoopInitiator trials_expAudio loopType="TrialHandler"
    conditionsFile = $'exp_stims_'+str(expInfo['participant'])+'.csv'
    loopType = random
    nReps = 1
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    Routine next_melody
    Routine play_audio
    Routine exp_clicks_file_loading
    Routine exp_attention_playback
    Routine exp_attention_choice
    Routine exp_attention_reset
    Routine attention_debug
    Routine attention_pass_check
  LoopTerminator trials_expAudio
  Routine pre_test
  LoopInitiator trials_testAudio loopType="TrialHandler"
    conditionsFile = $'test_stims_'+str(expInfo['participant'])+'.csv'
    loopType = random
    nReps = 1
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    Routine next_melody
    Routine play_audio
    Routine test_choice
    Routine choice_reset
    Routine test_clicks_file_loading
    Routine test_attention_playback
    Routine test_attention_choice
    Routine test_attention_reset
    Routine attention_debug
    Routine attention_pass_check
  LoopTerminator trials_testAudio
  Routine send_expt_data
  Routine click_redirect
  Routine end_scrap
  Routine end_screen
